global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'


hardware:
    microwave_dummy:
        module.Class: 'microwave.mw_source_smiq.MicrowaveSmiq'
        gpib_address: 'GPIB0::28::INSTR'
        gpib_timeout: 20

    myfastcounter:
        module.Class: 'timetagger_counter.TimeTaggerCounter'
        timetagger_channel_apd_0: 1
        timetagger_channel_apd_1: 2
        timetagger_sum_channels: False

    nicard_6323:
        module.Class: 'national_instruments_x_series_tt.NationalInstrumentsXSeries'
        default_scanner_clock_frequency: 100 # optional, in Hz
        clock_channel: '/Dev1/Ctr0' 
        counter_channels: '/Dev1/Ctr1' 
        scanner_clock_channel: '/Dev1/Ctr0' # internally connected to pixel_clock_channel
        pixel_clock_channel: '/Dev1/PFI6' # Connect to timetagger_pixel_start_ch, timetagger_pixel_stop_ch
        scanner_ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
        scanner_counter_channels: # won't be used
            - 'TimeTagger'
        scanner_voltage_ranges:
            - [0, 10]
            - [0, 10]
            - [0, 10]
        scanner_position_ranges:
            - [0e-6, 100e-6]
            - [0e-6, 100e-6]
            - [0e-6, 20e-6]
        timetagger_channel_apd_0: 1
        timetagger_channel_apd_1: 2
        timetagger_pixel_start_ch: 3
        timetagger_pixel_stop_ch: -3
        timetagger_sum_channels: True

        odmr_trigger_channel: '/Dev1/PFI3' 
        gate_in_channel: '/Dev1/Ctr1' # won't be used
logic:
    odmrlogic:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'nicard_6323'
            fitlogic: 'fitlogic'
            microwave1: 'microwave_dummy'
            savelogic: 'savelogic'
            taskrunner: 'tasklogic'

    counterlogic:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'myfastcounter'
            savelogic: 'savelogic'
    
    scannerlogic:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'nicard_6323'
            savelogic: 'savelogic'
    
    optimizerlogic:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'nicard_6323'
            fitlogic: 'fitlogic'
    
    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True
        save_pdf: True
        save_png: True
    
    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
            scannerLocationRefocus:
                module: 'refocus'
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizerlogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    counter:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counterlogic'
    confocal:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scannerlogic'
            savelogic: 'savelogic'
            optimizerlogic1: 'optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02
        default_meter_prefix: 'u'
    
    odmr:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmrlogic'
            savelogic: 'savelogic'